<?xml version='1.0'?>
<model name="FCepsilonRI" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="uM">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="per_s">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="uM_per_s">
        <unit units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="per_uM_per_s">
        <unit exponent="-1" units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="environment">
        <variable name="t" public_interface="out" units="s"/>
    </component>
    <component name="FCepsilonRI">
        <variable name="J1" units="uM_per_s"/>
        <variable name="J2" units="uM_per_s"/>
        <variable name="J3" units="uM_per_s"/>
        <variable name="J4" units="uM_per_s"/>
        <variable name="J5" units="uM_per_s"/>
        <variable name="J6" units="uM_per_s"/>
        <variable name="J7" units="uM_per_s"/>
        <!--Estimation start-->
        <variable initial_value="32.36" name="k_f1" units="per_s"/>
        <variable initial_value="44.67" name="K_1" units="uM"/>
        <variable initial_value="0.083" name="k_f2" units="per_s"/>
        <variable initial_value="1.69e-06" name="K_2" units="uM"/>
        <variable initial_value="0.46" name="K_3" units="uM"/>
        <variable initial_value="0.87" name="k_f5" units="per_s"/>
        <variable initial_value="4.68e-6" name="k_r5" units="per_uM_per_s"/>
        <variable initial_value="4.79" name="k_f6" units="per_s"/>
        <variable initial_value="1.2e-04" name="k_r6" units="per_uM_per_s"/>
        <variable initial_value="1" name="V_7" units="uM_per_s"/>
        <variable initial_value="1" name="K_7" units="uM"/>
        <variable initial_value="100" name="Lyn" units="uM"/>
        <variable initial_value="Grb2_init" name="Grb2" units="uM"/>
        <variable initial_value="6.39" name="Grb2_init" units="uM"/>
        <!--Estimation end-->
        <variable initial_value="0.93" name="k_f3" units="per_s"/>
        <variable initial_value="0.112" name="k_f4" units="per_uM_per_s"/>
        <variable initial_value="0.0016" name="k_r4" units="per_s"/>
        <variable initial_value="1" name="FC" units="uM"/>
        <variable initial_value="0" name="pFC" units="uM"/>
        <variable initial_value="0.005" name="Syk" units="uM"/>
        <variable initial_value="0" name="pSyk" units="uM"/>
        <variable initial_value="0" name="pGrb2" units="uM"/>
        <variable initial_value="0" name="pGrb2PI3K" units="uM"/>
        <variable initial_value="0.01" name="PI3K" units="uM"/>
        <variable initial_value="0" name="PI3Ka" units="uM"/>
        <variable initial_value="0" name="pGrb2PI3Ka" units="uM"/>
        <variable name="t" public_interface="in" units="s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J1</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_f1</ci>
                        <ci>Lyn</ci>
                        <ci>FC</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>K_1</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <times/>
                                        <ci>pFC</ci>
                                        <ci>Syk</ci>
                                    </apply>
                                    <ci>K_2</ci>
                                </apply>
                            </apply>
                        </apply>
                        <ci>FC</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J2</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_f2</ci>
                        <ci>pFC</ci>
                        <ci>Syk</ci>
                        <ci>Lyn</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>K_2</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <divide/>
                                    <ci>pFC</ci>
                                    <ci>K_1</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>pFC</ci>
                            <ci>Syk</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J3</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_f3</ci>
                        <ci>pSyk</ci>
                        <ci>Grb2</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>K_3</ci>
                        <ci>Grb2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J4</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f4</ci>
                        <ci>pGrb2</ci>
                        <ci>PI3K</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r4</ci>
                        <ci>pGrb2PI3K</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J5</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f5</ci>
                        <ci>pGrb2PI3K</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r5</ci>
                        <ci>pGrb2</ci>
                        <ci>PI3Ka</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J6</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f6</ci>
                        <ci>pGrb2PI3Ka</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r6</ci>
                        <ci>pGrb2</ci>
                        <ci>PI3Ka</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J7</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>V_7</ci>
                        <ci>PI3Ka</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>K_7</ci>
                        <ci>PI3Ka</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>FC</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pFC</ci>
                </apply>
                <ci>J1</ci>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Syk</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pSyk</ci>
                </apply>
                <ci>J2</ci>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Grb2</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pGrb2</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J3</ci>
                        <ci>J4</ci>
                    </apply>
                    <ci>J6</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>PI3K</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J4</ci>
                    </apply>
                    <ci>J7</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>PI3Ka</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J6</ci>
                    <ci>J7</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pGrb2PI3K</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J4</ci>
                    <ci>J6</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pGrb2PI3Ka</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J5</ci>
                    <ci>J6</ci>
                </apply>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="environment" component_2="FCepsilonRI"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
</model>
